PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  expName = CombinedMST
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Routines
  Routine Study
    TextComponent Question
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        What is this sound?
    TextboxComponent ResponseBox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    MouseComponent SubmitClick
      clickable = Submit
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent ClickTheButton
      letterHeight = 0.025
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      text = Click 'Submit' to continue.
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    SoundComponent SoundItem
      sound [set every repeat] = $SoundFiles3
      startVal [time (s)] = 0.0
      volume = 1.1
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    TextComponent ItemNo
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    CodeComponent FinishTrial
      Code Type = Auto->JS
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      End Routine:
        #if trials.thisN == 2: # i.e. trials 0, 1, 2 have been completed
         #   trials.finished = True # end the loop early


        #if count == 60:
        #    trials.finished = True
        #    #trials.status = PsychoJS.Status.FINISHED
    TextboxComponent Submit
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      padding = None
      pos = (0, -0.4)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      text = Submit
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  Routine Count2
    TextComponent no2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent Sound_trialcount
      Code Type = Auto->JS
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      Begin Routine:
        count += 1
        number = str(count) + "/128"
        NoSoundOn = 0
        if count == 45 or count == 82:
            NoSoundOn = 1
        else:
            NoSoundOn = 0
  Routine Count3
    TextComponent Cross1Sec
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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  Routine Count1
    CodeComponent Word_trialcount
      Code Type = Auto->JS
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      Begin Routine:
        count += 1
        number = str(count) + "/100"
    TextComponent no_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine Welcome
    TextComponent InstructionTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment



        This experiment involves audio stimuli and requires you to wear headphones. Before we begin, please make sure that you're in a quiet listening environment, that you are wearing headphones, and that your volume is turned on.
    KeyboardComponent WelcomeContinueKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent WelcomContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine VolumeAdjustment
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please adjust your volume to a comfortable level.
    SoundComponent Music
      sound = volumeadjust.wav
      startVal [time (s)] = 0.0
      volume = 0.3
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    KeyboardComponent EndAdjustment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent AdjustContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready to begin the task
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  Routine Start
    TextComponent StartTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great job! This is the end of the practice.


        We will now begin the actual task. There are 100 sound files in total. The words from the practice are not part of the actual task.
    KeyboardComponent StartKey
      allowedKeys = 'space' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ContinueStart
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin the task
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    CodeComponent SelectCondition
      Code Type = Both
      End JS Routine:
        count = 0
        condition = "0:100";
        c = Math.floor(Math.random() * 6);
        if ((c === 0)) {
            condition = "0:100";
        } else {
            if ((c === 1)) {
                condition = "100:200";
            } else {
                if ((c === 2)) {
                    condition = "200:300";
                } else {
                    if ((c === 3)) {
                        condition = "300:400";
                    } else {
                        if ((c === 4)) {
                            condition = "400:500";
                        } else {
                            if ((c === 5)) {
                                condition = "500:600";
                            }
                        }
                    }
                }
            }
        }
      End Routine:
        count = 0
        condition = "0:100"
        import random
        c = random.randint(0, 6)
        if c == 0:
            condition = "0:100"
        elif c == 1:
            condition = "100:200"
        elif c == 2:
            condition = "200:300"
        elif c == 3:
            condition = "300:400"
        elif c == 4:
            condition = "400:500"
        elif c == 5:
            condition = "500:600"
  Routine End
    TextComponent ThankyouMssg
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation!


        Your Completion Code is
    TextboxComponent CompletionCode
      bold = True
      borderColor = Black
      color = Black
      editable = False
      fillColor = White
      letterHeight = 0.04
      padding = None
      pos = (0, 0.1)
      size = (0.25, 0.07)
      startVal [time (s)] = 0.0
      text = 51DF249E
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    KeyboardComponent ExitKey
      allowedKeys = 'return', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent CodeTxt
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Please write the code down so you can enter it when you return to Prolific. You may then exit the study by pressing ENTER.
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    TextboxComponent Feedbackbox
      bold = False
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.03
      padding = None
      pos = (0, -0.4)
      size = (1, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent FeedbackPrompt
      font = Times New Roman
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Please feel free to leave any comment or feedback on the study (Was there any technical issue? Any instruction that was unclear? etc.).
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  Routine StartAdjustment
    TextComponent VolumeBeginTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will begin with a quick volume calibration and headphone check.

        First, we will play some music to make sure that your sound volume is at a comfortable level.



        Press SPACE to begin the volume calibration
    KeyboardComponent VolumeContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MST
    TextComponent MSTQuestion
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        (Press the corresponding number on your keyboard)

        1 = OLD       2 = NEW
    KeyboardComponent MSTResp
      allowedKeys = '1', '2'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Welcome1
    KeyboardComponent Welcome1Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Task1Slide
      image = Task 1.jpg
      size = (1.7, 0.9)
      startVal [time (s)] = 0.0
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  Routine PracticeBegin
    TextComponent InstructionTxt2
      disabled = True
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will begin with a few practice trials to familiarize you with the task. During the practice, we will give you the correct answer.
    TextComponent WelcomeContinue2
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to begin practice
    KeyboardComponent WelcomeContinueKey2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PracticeText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Let's start with some practice
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  Routine Practice1
    CodeComponent WordPractice_trialcount
      Code Type = Auto->JS
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      Begin Experiment:
        WTcount = 0
      Begin Routine:
        WTcount += 1
        WTrialCount = 'Trial ' + str(WTcount)
    TextComponent TrialNumber
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $WTrialCount
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    SoundComponent PracticeSound
      sound [set every repeat] = $SoundFile
      startVal [time (s)] = 0.0
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    TextComponent PracticeCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent PracticeRespKey2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeFeedback
    CodeComponent FeedbackMessage
      Code Type = Auto->JS
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      Begin Routine:
        #Tcount += 1
        #TrialCount = 'Trial ' + str(Tcount)
        if Type == 'NEW':
            message = "This is a NEW word. \nThis is your first time hearing this word."
        elif Type == 'SIMILAR':
            message = "This is a NEW word. \nNote that this one sounds similar to the previous word but is not exactly the same."
        elif Type == 'OLD':
            message = "This is an OLD word. \nThis word is exactly the same as the first word."
      End Routine:
        if Practice_resp.corr == 1:
            feedback = 'CORRECT'
        else:
            feedback = 'INCORRECT'
    KeyboardComponent Practice_resp
      allowedKeys = 'space',
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PracticeMssg
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
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    TextComponent FeedbackCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    TextComponent Continue
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the correct number on your keyboard
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    TextComponent Options
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1 = OLD      2 = NEW
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  Routine HeadphoneCheck
    TextComponent HeadphoneCheckBeing
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Next, we will do a short headphone check. Failure to meet the headphone requirement may cause your submission to be rejected.

        On each trial, you will hear three tones. One of these tones will be quieter than the others. You will identify whether the quiet tone occurred first, second, or third.

        There are six trials in total.
    TextComponent HeadphoneContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent HeadphoneContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine HeadphonePlay
    SoundComponent CheckSound
      sound [set every repeat] = $File
      startVal [time (s)] = 0.0
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    CodeComponent Headphone_trialcount
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
        checkcount = str(counter) + "/6"
      Begin Routine:
        counter += 1
        checkcount = str(counter) + "/6"
      End Routine:
        if CheckResp.corr == 1:
            message = "CORRECT"
        else:
            message = "INCORRECT"
    TextComponent QuestionTxt
      letterHeight = 0.04
      startVal [time (s)] = $CheckSound.getDuration() + 0.5
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      text:
        Which tone was the quietest?
        (Press the corresponding number on your keyboard)

        1 = First  2 = Second  3 = Third
    TextComponent CheckTrial
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CheckSound.getDuration() + 0.5
      text [set every repeat] = $checkcount
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    TextComponent CrossHeadphone
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CheckSound.getDuration() + 0.5
      text = +
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    KeyboardComponent CheckResp
      allowedKeys = '1', '2', '3', 
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = $CheckSound.getDuration() + 0.5
      storeCorrect = True
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  Routine HeadphoneFeedback
    TextComponent FeedbackTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message
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  Routine PracticeFeedbackII
    TextComponent FeedbackMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine MSTWord
    SoundComponent TargetSound
      sound [set every repeat] = $File
      startVal [time (s)] = 0.0
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    TextComponent ItemNumber
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    TextComponent Option
      disabled = True
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        (Press the corresponding number on your keyboard)

        1 = OLD       2 = NEW
    KeyboardComponent MST_resp
      allowedKeys = '1', '2', 
      correctAns = $WordCorrect
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    TextComponent Option2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Old or New?
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  Routine SoundPractice
    CodeComponent Soundpractice_trialcount
      Code Type = Auto->JS
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      Begin Experiment:
        Tcount = 0
      Begin Routine:
        Tcount += 1
        TrialCount = 'Trial ' + str(Tcount)
    SoundComponent PracticeSound2
      sound [set every repeat] = $SoundMST_File
      startVal [time (s)] = 0.0
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    TextComponent PracticeCrossW
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    TextComponent PracticeTrialNo
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $TrialCount
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    KeyboardComponent PracticeRespKey2II
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SoundPracticeFeedback
    CodeComponent Sound_feedbackmessage
      Code Type = Auto->JS
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      Begin Routine:
        if SoundType == 'NEW':
            message = "This is a NEW sound. \nThis is your first time hearing this sound."
        elif SoundType == 'SIMILAR':
            message = "This is a NEW sound. \nNote that this one sounds similar to the previous sound but is not exactly the same."
        elif SoundType == 'OLD':
            message = "This is an OLD sound. \nThis sound is exactly the same as the first sound."
      End Routine:
        if PracticeSoundKey.corr == 1:
            feedback = 'CORRECT'
        else:
            feedback = 'INCORRECT'
    TextComponent Message
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
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    TextComponent OptionsW
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1 = OLD      2 = NEW
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    TextComponent PracticeCrossW2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    TextComponent PracticeContinueW
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the correct number on your keyboard
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    KeyboardComponent PracticeSoundKey
      allowedKeys = 'space', 
      correctAns = $SoundCorrect
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SoundPracticeFeedbackII
    TextComponent Feedbackmessage
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine MSTSound
    TextComponent MSTSoundCount
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $MSTSoundPlay.getDuration()+0.5
      text [set every repeat] = $number
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    SoundComponent MSTSoundPlay
      sound [set every repeat] = $SoundMST_File
      startVal [time (s)] = 0.0
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    TextComponent MSTSoundCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $MSTSoundPlay.getDuration()+0.5
      text = +
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  Routine MSTSoundResponse
    TextComponent MSTSoundOptions
      disabled = True
      letterHeight = 0.04
      pos = (-0.4, 0)
      startVal [time (s)] = 0
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      text:
        (Press the corresponding number on your keyboard)

        1 = OLD (The exact same sound has been played before)

        2 = NEW (This sound is being played for the first time)

        0 = NO SOUND
    TextComponent MSTSoundNote
      disabled = True
      letterHeight = 0.035
      pos = (-0.4, -0.35)
      startVal [time (s)] = 0.0
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      text:
        *Sounds that are similar to but different from previously played sounds should also be labeled as NEW
    KeyboardComponent MSTSoundKey
      allowedKeys = '1','2', 
      correctAns = $SoundCorrect
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent TextAlignLeft
      Code Type = Both
      Begin JS Routine:
        //MSTSoundOptions.setAlignHoriz('left');
        //MSTSoundNote.setAlignHoriz('left');
      Begin Routine:
        #MSTSoundOptions.alignText='left'
        #MSTSoundNote.alignText='left'
    TextComponent Options2II
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Old or New?
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  Routine MSTSoundStart
    CodeComponent Sound_selectcondition
      Code Type = Both
      End JS Routine:
        count = 0
        rows = "5:133";
        s = Math.floor(Math.random() * 1);
        if ((s === 0)) {
            rows = "5:133";
        } else {
            if ((s === 1)) {
                rows = "133:261";
            } else {
                if ((s === 2)) {
                    rows = "261:389";
                } else {
                    if ((s === 3)) {
                        rows = "389:517";
                    } else {
                        if ((s === 4)) {
                            rows = "517:645";
                        } else {
                            if ((s === 5)) {
                                rows = "645:773";
                            }
                        }
                    }
                }
            }
        }
      End Routine:
        count = 0
        rows = "5:133"
        import random
        s = random.randint(0, 1)
        if s == 0:
            rows = "5:133"
        elif s == 1:
            rows = "133:261"
        elif s == 2:
            rows = "261:389"
        elif s == 3:
            rows = "389:517"
        elif s == 4:
            rows = "517:645"
        elif s == 5:
            rows = "645:773"
    TextComponent MSTSoundStrtMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great job! This is the end of the practice.


        We will now begin the actual task. There are 128 sound files in total. The sounds from the practice are not part of the actual task.
    TextComponent MSTSoundStrt
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent MSTSoundStrtKey
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End1
    TextComponent EndMssg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Great job! This is the end of this component. 
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    KeyboardComponent End1Cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End2
    TextComponent EndMssg2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation!




        Press SPACE to exit
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WelcomeSound2
    TextComponent WelcomeSound2Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Importantly, some of the sounds are similar but not identical. Pay close attention to each sound and only label one as "OLD" if it is EXACTLY THE SAME as a previously presented sound.
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    TextComponent WelcomeSound2Cont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent WelcomeSound2ContKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        Tcount = 0
        TrialCount = 'Trial ' + str(Tcount)
  Routine Welcome0
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        run = 1
      Begin Routine:
        if run == 1:
            intromssg = "This experiment has two parts, each lasting about 15 minutes. You may take a short break between the two tasks, but please do not exit the study until you finish all the components. \n\n\n\n\n\n\nPress SPACE to begin Part I"
        else:
            intromssg = "Great job! This is the end of Part I. In Part II, you will perform the same task with a different type of sounds. \nYou may take a short break now if you wish. \n\n\n\n\n\n\nPress SPACE to begin Part II"
      End Routine:
        run += 1
    TextComponent Welcome0Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $intromssg
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    KeyboardComponent Welcome0ContKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NoSound
    TextComponent Pause
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    TextComponent NoSoundText
      letterHeight = 0.04
      pos = (-0.4, 0)
      startVal [time (s)] = 3
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      text:
        (Press the corresponding number on your keyboard)

        1 = OLD   (The EXACT SAME sound has been played before)

        2 = NEW (This sound is being played for the first time)

        0 = NO SOUND
    TextComponent NoSoundNote
      letterHeight = 0.035
      pos = (-0.4, -0.35)
      startVal [time (s)] = 3
      text = *Sounds that are similar to but different from previously played sounds should also be labeled as NEW
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    KeyboardComponent NoSoundResp
      allowedKeys = '1', '2', '0', 
      correctAns = 0
      forceEndRoutine = True
      startVal [time (s)] = 3
      storeCorrect = True
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    CodeComponent TextAlignLeft2
      Code Type = Both
      Begin JS Routine:
        NoSoundText.setAlignHoriz('left');
        NoSoundNote.setAlignHoriz('left');
      Begin Routine:
        NoSoundText.alignText='left'
        NoSoundNote.alignText='left'
  Routine SimilarityPresentation
    CodeComponent SimTrialCount
      Code Type = Auto->JS
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      Begin Experiment:
        simcount = 0
      Begin Routine:
        simcount += 1
        simcounter = str(simcount) + "/83"
    SoundComponent FirstSound
      sound [set every repeat] = $Sound1
      startVal [time (s)] = 0.0
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    SoundComponent SecondSound
      sound [set every repeat] = $Sound2
      startVal [time (s)] = $FirstSound.getDuration() + 1.0
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    TextComponent Cross
      letterHeight = 0.1
      startVal [time (s)] = $FirstSound.getDuration()
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent NumberOne
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FirstSound.getDuration()
      text = Sound 1
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    TextComponent NumberTwo
      letterHeight = 0.05
      startVal [time (s)] = $FirstSound.getDuration() + 1.0
      stopVal [duration (s)] = $SecondSound.getDuration()
      text = Sound 2
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    TextComponent SimTrialNumber
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FirstSound.getDuration() + 1 + SecondSound.getDuration()
      text [set every repeat] = $simcounter
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  Routine Welcome3
    ImageComponent Task3Slide
      image = Task 3.jpg
      size = (1.7, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent Welcome3Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SimlarityResponse
    TextComponent SimilarityRatingScale
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        1 ----------------- 2 ----------------- 3 ----------------- 4
        Different                                                   Same
    KeyboardComponent SimilarityRatingKey
      allowedKeys = '1', '2', '3', '4', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SoundLabeling
    TextComponent SoundLabelQuestion
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = What is this sound?
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    SoundComponent Sound
      sound [set every repeat] = $Sound1
      startVal [time (s)] = 0.5
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    KeyboardComponent LabelingKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome4
    ImageComponent Task4Slide
      image = Task 4.jpg
      size = (1.7, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent Welcome4Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Countdown
    TextComponent No3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent No2
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent No1
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine Welcome2_2
    KeyboardComponent Welcome2Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Task2Slide
      image = Task 2.jpg
      size = (1.7, 0.9)
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator Headphone loopType="TrialHandler"
    conditionsFile = Headphone_check.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [OrderedDict([('File', 'Headphone/t1_1.wav'), ('Correct', 1)]),
      OrderedDict([('File', 'Headphone/t1_2.wav'), ('Correct', 1)]),
      OrderedDict([('File', 'Headphone/t2_1.wav'), ('Correct', 2)]),
      OrderedDict([('File', 'Headphone/t2_2.wav'), ('Correct', 2)]),
      OrderedDict([('File', 'Headphone/t3_1.wav'), ('Correct', 3)]),
      OrderedDict([('File', 'Headphone/t3_2.wav'), ('Correct', 3)])]
    Routine HeadphonePlay
    Routine HeadphoneFeedback
  LoopTerminator Headphone
  LoopInitiator WordTask loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Welcome1
    Routine PracticeBegin
    LoopInitiator PracticeLoop loopType="TrialHandler"
      conditionsFile = WordMST_practicetrials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('SoundFile', 'WordMSTPractice/FO_YI_LAY.wav'), ('Type', 'NEW'), ('Correct', 2)]),
        OrderedDict([('SoundFile', 'WordMSTPractice/FO_YI_LAY.wav'), ('Type', 'OLD'), ('Correct', 1)]),
        OrderedDict([('SoundFile', 'WordMSTPractice/YO_BU_JAY.wav'), ('Type', 'NEW'), ('Correct', 2)]),
        OrderedDict([('SoundFile', 'WordMSTPractice/JAY_YO_BU.wav'), ('Type', 'SIMILAR'), ('Correct', 2)]),
        OrderedDict([('SoundFile', 'WordMSTPractice/FO_YI_LAY.wav'), ('Type', 'OLD'), ('Correct', 1)])]
      Routine Practice1
      Routine PracticeFeedback
    LoopTerminator PracticeLoop
    Routine Start
    Routine Countdown
    LoopInitiator WordMSTLoop loopType="TrialHandler"
      Selected rows = 0:100
      conditionsFile = WordMST_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('File', 'WordMST/HA_SI_JAI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/KO_SU_FAI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/TAI_GI_SA.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/KAI_LAY_TA.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/RAY_PA_TI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/KO_SU_FAI.wav'), ('WordCorrect', 1), ('Correct_type', 'OLD'), ('WordType', 'OLD'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/TAI_SA_GI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'SIMILAR'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/KAI_LAY_TA.wav'), ('WordCorrect', 1), ('Correct_type', 'OLD'), ('WordType', 'OLD'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/NA_WAI_VU.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/KO_SU_FAI.wav'), ('WordCorrect', 1), ('Correct_type', 'OLD'), ('WordType', 'OLD'), ('Condition', 'A')]),
        OrderedDict([('File', 'WordMST/RAY_PA_TI.wav'), ('WordCorrect', 1), ('Correct_type', 'OLD'), ('WordType', 'OLD'), ('Condition', 'A')])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
      Routine Count1
      Routine MSTWord
    LoopTerminator WordMSTLoop
  LoopTerminator WordTask
  Routine End1
  LoopInitiator SoundTask loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Welcome2_2
    Routine PracticeBegin
    LoopInitiator SoundPracticeLoop loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = SoundMST_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('SoundMST_File', 'SoundMSTPractice/Seagull_A.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Skid_B.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Seagull_A.wav'), ('SoundCorrect', 1), ('Correct2', 1), ('SoundType', 'OLD'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Gargle_A.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Gargle_B.wav'), ('SoundCorrect', 2), ('Correct2', 2), ('SoundType', 'SIMILAR'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/Buzz.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/Writing_A.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/CarStart_E.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/Elephant_C.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)])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
      Routine SoundPractice
      Routine SoundPracticeFeedback
    LoopTerminator SoundPracticeLoop
    Routine MSTSoundStart
    Routine Countdown
    LoopInitiator MSTSoundLoop loopType="TrialHandler"
      Selected rows = 5:133
      conditionsFile = SoundMST_trials.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('SoundMST_File', 'SoundMSTPractice/Seagull_A.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Skid_B.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Seagull_A.wav'), ('SoundCorrect', 1), ('Correct2', 1), ('SoundType', 'OLD'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Gargle_A.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMSTPractice/Gargle_B.wav'), ('SoundCorrect', 2), ('Correct2', 2), ('SoundType', 'SIMILAR'), ('Trial', 'Practice'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/Buzz.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/Writing_A.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/CarStart_E.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)]),
        OrderedDict([('SoundMST_File', 'SoundMST/Elephant_C.wav'), ('SoundCorrect', 2), ('Correct2', 3), ('SoundType', 'NEW'), ('Trial', 'A'), ('Lagsize', None)])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
      Routine Count2
      Routine MSTSound
      Routine MSTSoundResponse
    LoopTerminator MSTSoundLoop
  LoopTerminator SoundTask
  Routine End1
  LoopInitiator SimilarityRatingTask loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Welcome3
    Routine Countdown
    LoopInitiator SimilarityRatingLoop loopType="TrialHandler"
      Selected rows = 0:83
      conditionsFile = Similarity_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Sound1', 'SoundMST/Baby_C.wav'), ('Sound2', 'SoundMST/Baby_B.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Bird_C.wav'), ('Sound2', 'SoundMST/Bird_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Bubbles_A.wav'), ('Sound2', 'SoundMST/Bubbles_B.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/CarStart_E.wav'), ('Sound2', 'SoundMST/CarStart_D.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Chime_D.wav'), ('Sound2', 'SoundMST/Chime_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Chomp_A.wav'), ('Sound2', 'SoundMST/Chomp_C.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Clap_A.wav'), ('Sound2', 'SoundMST/Clap_D.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Coin_D.wav'), ('Sound2', 'SoundMST/Coin_E.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Cough_I.wav'), ('Sound2', 'SoundMST/Cough_J.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Dog_H.wav'), ('Sound2', 'SoundMST/Dog_I.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Duck_B.wav'), ('Sound2', 'SoundMST/Duck_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Elephant_C.wav'), ('Sound2', 'SoundMST/Elephant_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Faucet_A.wav'), ('Sound2', 'SoundMST/Faucet_C.wav'), ('PairType', 'SIMILAR')])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
      Routine Count3
      Routine SimilarityPresentation
      Routine SimlarityResponse
    LoopTerminator SimilarityRatingLoop
  LoopTerminator SimilarityRatingTask
  Routine End1
  LoopInitiator LabelingTask loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Welcome4
    LoopInitiator SoundLabelLoop loopType="TrialHandler"
      Selected rows = 83:171
      conditionsFile = Similarity_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Sound1', 'SoundMST/Baby_C.wav'), ('Sound2', 'SoundMST/Baby_B.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Bird_C.wav'), ('Sound2', 'SoundMST/Bird_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Bubbles_A.wav'), ('Sound2', 'SoundMST/Bubbles_B.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/CarStart_E.wav'), ('Sound2', 'SoundMST/CarStart_D.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Chime_D.wav'), ('Sound2', 'SoundMST/Chime_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Chomp_A.wav'), ('Sound2', 'SoundMST/Chomp_C.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Clap_A.wav'), ('Sound2', 'SoundMST/Clap_D.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Coin_D.wav'), ('Sound2', 'SoundMST/Coin_E.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Cough_I.wav'), ('Sound2', 'SoundMST/Cough_J.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Dog_H.wav'), ('Sound2', 'SoundMST/Dog_I.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Duck_B.wav'), ('Sound2', 'SoundMST/Duck_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Elephant_C.wav'), ('Sound2', 'SoundMST/Elephant_A.wav'), ('PairType', 'SIMILAR')]),
        OrderedDict([('Sound1', 'SoundMST/Faucet_A.wav'), ('Sound2', 'SoundMST/Faucet_C.wav'), ('PairType', 'SIMILAR')])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
      Routine Count3
      Routine SoundLabeling
    LoopTerminator SoundLabelLoop
  LoopTerminator LabelingTask
  Routine End1
